PsychoPy2experiment version="2024.2.5"
Settings
  Data file delimiter = comma
  Data filename = u'psychopy_output/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '999', 'run': '999', 'condition': 'ratings'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = image_evolution
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      flipHoriz = True
      image [set every repeat] = $image_path
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
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  Routine rating_slider
    RoutineSettingsComponent rating_slider
      skipIf = np.isin(response_method, ["button", "none"])
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    CodeComponent slider_rating_code
      Code Type = Py
      Begin Routine:
        ## Clear buffer
        #keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
        ## Define rating dict
        #rating_dict = {"1": 0, "2": 1, "3": 2, "4": 3, "6": 4}
        #
      Each Frame:
        ## Check for keypress
        #keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
        #
        #if keys:
        #    ratings[trials.thisN] = rating_dict[keys[0]]
        #    response_times[trials.thisN] = timer.getTime()
        #    print(f"Rating is: {rating_dict[keys[0]]}")
        #    continueRoutine = False
      End Routine:
        ## If no keys pressed, set data values as NA
        #if keys is None:
        #    ratings[trials.thisN] = np.NaN
        #    response_times[trials.thisN] = np.NaN
        #    print(f"Rating is: {pd.NA}")
        #
        #firstTrial = True

        ratings[trials.thisN] = slider.getRating()
        response_times[trials.thisN] = slider.getRT()
    SliderComponent slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ButtonComponent button
      bold = False
      color = black
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.5
      text = Done
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    TextComponent slider_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Please make a rating.
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine start_text
    RoutineSettingsComponent start_text
      saveStartStop = False
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    TextComponent intro_text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Placeholder
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent core_code
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import numpy as np
        import json
        import os, shutil, subprocess
        import atexit, signal
        from datetime import datetime, timedelta
        import pandas as pd
      Begin Experiment:
        # Set global vars and process experiment parameters
        participant = int(expInfo['participant'])
        run = int(expInfo['run'])
        session = int(expInfo['session'])
        condition = expInfo['condition']

        with open('../config.json') as f:
            config = json.load(f)

        data_dir = config["output_path"]
        output_path = os.path.join("..", data_dir, f"sub-{participant:02}", f"ses-{session:02}", f"run-{run}")

        if not os.path.exists(output_path):
            os.makedirs(output_path)
        else:
            raise Exception("Target path for this participant, run, and session already exists!\nAborting...")

        max_iters = config["max_iters"]
        pop_size = config["pop_size"]
        mutation_size = config["mutation_size"]
        latent_size = config["latent_size"]

        valid_conditions = config["valid_conditions"]
        if not np.isin(condition, valid_conditions):
            raise Exception("ERROR: Invalid condition entered.\nAborting...")

        instruction_text = config["instruction_text"]
        intro_text.text = instruction_text

        multi_computer = int(config["multi_computer"])
        response_method = config["response_method"]
        osc_streaming = int(config["osc_streaming"])

        # Create output df
        latent_column_names = [f"x{i}" for i in range(latent_size)]
        df = pd.DataFrame(columns=[
            "participant",
            "session",
            "run",
            "generation",
            "img_num",
            "onset",
            "rating",
            "response_time",
            *latent_column_names])

        # Create timer
        timer = core.Clock()
  Routine end_text
    RoutineSettingsComponent end_text
      saveStartStop = False
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    TextComponent complete_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Experiment complete.
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  Routine save_data
    RoutineSettingsComponent save_data
      saveStartStop = False
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    CodeComponent data_code
      Code Type = Py
      Begin Routine:
        # Save onset times and ratings so that collector can begin processing fMRI data
        np.savetxt(os.path.join(this_gen_output_path, "onset_times.txt"), onset_times, delimiter=',')
        np.savetxt(os.path.join(this_gen_output_path, "ratings.txt"), ratings, delimiter=',')

        continueRoutine = False
      End Routine:
        ## Save as dataframe
        print("Saving data...")
        df_info = pd.DataFrame(data = {
            "participant": np.repeat(participant, pop_size),
            "session": np.repeat(session, pop_size),
            "run": np.repeat(run, pop_size),
            "generation": np.repeat(generations.thisN, pop_size),
            "img_num": np.arange(pop_size),
            "onset": onset_times,
            "rating": ratings,
            "response_time": response_times
            })

        this_trial_latents = np.loadtxt(os.path.join(this_gen_output_path, "latents.txt"), delimiter=",")
        df_latents = pd.DataFrame(data = this_trial_latents, columns = latent_column_names)

        df_this_trial = pd.concat([df_info, df_latents], axis=1)
        df = pd.concat([df, df_this_trial], axis=0)
        df.to_csv(os.path.join(output_path, "all_data.csv"), sep=",")
    PolygonComponent data_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine check_eda
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    TextComponent check_eda_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There is a problem with the EDA connection.

        Please alert the experimenter before continuing with the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent repeat_code
      Code Type = Py
      Begin Routine:
        if not repeat:
            repeat_loop.finished = True
            continueRoutine = False
        elif repeat:
            win.fullscr = False
            win.flip()
            failed_trials.append(f"generation {iteration}, trial {trial}")
      End Routine:
        if repeat:
            win.fullscr = True
            win.flip()
  Routine rating_button
    RoutineSettingsComponent rating_button
      skipIf = np.isin(response_method, ["slider", "none"])
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    CodeComponent button_rating_code
      Code Type = Py
      Begin Routine:
        # Clear buffer
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
        # Define rating dict
        rating_dict = {"1": 0, "2": 1, "3": 2, "4": 3, "6": 4}
      Each Frame:
        # Check for keypress
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])

        if keys:
            ratings[trials.thisN] = rating_dict[keys[0]]
            response_times[trials.thisN] = timer.getTime()
            print(f"Rating is: {rating_dict[keys[0]]}")
            continueRoutine = False
      End Routine:
        # If no keys pressed, set data values as NA
        if keys is None:
            ratings[trials.thisN] = np.NaN
            response_times[trials.thisN] = np.NaN
            print(f"Rating is: {pd.NA}")

        #ratings[trials.thisN] = slider.getRating()
        #response_times[trials.thisN] = slider.getRT()
    PolygonComponent rating_fixation_square
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine washout
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    PolygonComponent washout_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine generator
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    CodeComponent start_subprocess_code
      Code Type = Py
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      Begin Routine:
        # When trigger is received, set clock to zero
        timer.reset()

        # Record start time
        start_time = datetime.now().strftime("%H:%M:%S.%f")
        with open(os.path.join(output_path, "run_start_time.txt"), 'w') as f:
            f.write(start_time)

        if multi_computer == 0:
            # Start collector subprocess
            collector = subprocess.Popen(['python', '../code/generator.py', '--output', output_path, '--condition', condition])
            atexit.register(os.kill, collector.pid, signal.CTRL_C_EVENT)

        if osc_streaming == 1:
            # Start OSC subprocess
            osc_server = subprocess.Popen(['python', '../code/osc_server.py', '--output', output_path])
            atexit.register(os.kill, osc_server.pid, signal.CTRL_C_EVENT)

        continueRoutine = False
    TextComponent starting_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Starting...
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  Routine generation_start
    RoutineSettingsComponent generation_start
      saveStartStop = False
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    CodeComponent gen_start_code
      Code Type = Py
      Begin Routine:
        # Set output path
        iteration = generations.thisN
        print(f"Beginning generation: {iteration}")

        this_gen_output_path = os.path.join(output_path, f"generation_{iteration:02}")
        while not os.path.exists(this_gen_output_path):
            core.wait(0.1)
      Each Frame:
        # Wait for first image to be generated
        status_file = os.path.join(this_gen_output_path, "status.txt")

        while not os.path.isfile(status_file):
            core.wait(0.1)

        status = np.loadtxt(status_file, delimiter = ',')

        if status.shape[0] == 0:
            core.wait(0.1)
        elif status[0]:
            image_path = os.path.join(this_gen_output_path, "img_00.png")
            continueRoutine = False
        else:
            core.wait(0.1)
      End Routine:
        # Set image path
        image_path = f"{this_gen_output_path}/img_00.png"

        # Initialize data arrays
        onset_times = np.zeros(pop_size)
        ratings = np.zeros(pop_size)
        response_times = np.zeros(pop_size)
    PolygonComponent gen_start_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine set_next_image
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    CodeComponent set_image
      Code Type = Py
      Begin Routine:
        onset_times[trials.thisN] = timer.getTime() - 4
      Each Frame:
        # Wait for next image to be generated
        if trials.thisN + 1 == pop_size:
            print(f"Generation {iteration} finished.")
            continueRoutine = False
        else:
            status_file = os.path.join(this_gen_output_path, "status.txt")
            while not os.path.isfile(status_file):
                core.wait(0.1)

            status = np.loadtxt(status_file, delimiter = ',')

            if status.shape[0] == 0:
                core.wait(0.1)
            elif status[trials.thisN + 1]:
                image_path = os.path.join(this_gen_output_path, f"img_{trials.thisN+1:02}.png")
                continueRoutine = False
            else:
                core.wait(0.1)
    PolygonComponent set_image_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine trial_subliminal
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    ImageComponent subliminal_image
      image [set every repeat] = $image_path
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.015
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    ImageComponent mask
      image = resources/noise_image.jpg
      size = (1, 1)
      startVal [time (s)] = 0.015
      stopVal [time (s)] = 0.1
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Flow
  Routine start_text
  Routine generator
  Routine washout
  LoopInitiator generations loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = max_iters
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    Routine generation_start
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = pop_size
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      Routine trial
      Routine rating_slider
      Routine rating_button
      Routine washout
      Routine set_next_image
    LoopTerminator trials
    Routine save_data
  LoopTerminator generations
  Routine end_text
