PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'dev_mode': '0', 'max_iters': '10', 'pop_size': '8', 'scr_attached': '1', 'diffusion_steps': '21'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = image_gen
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        ## Generate batch of images

        ## Variables
        #iteration = generations.thisN
        trial = trials.thisN
        #embedding = this_gen_embeddings[trial, :]

        ## Set image
        image_name = f"images/num-{trial}.png"
      End Routine:
        ## Update output matrices
        #all_embeddings[iteration,trial,:] = embedding

        current_time = datetime.now().time()
    ImageComponent image
      image [set every repeat] = $image_name
      size = (0.75, 0.75)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3.0
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    TextComponent pre_stim
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
      text = +
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    TextComponent post_stim
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine washout
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    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine generating
    RoutineSettingsComponent generating
      saveStartStop = False
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent generate_images
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import torch
        import numpy as np
        from diffusers import StableUnCLIPImg2ImgPipeline
        from sklearn.decomposition import PCA
        import pickle as pk
        import os, shutil
        from datetime import datetime, timedelta
        import pandas as pd
        import subprocess
        import atexit
        import signal
        import math

        ## Classes
        class Image(visual.ImageStim):
            # Embedding property
            embedding = None


        ## Functions
        def generate_image(embedding, image_name):
            # Ensure correct size and datatype
            embedding = torch.tensor(np.reshape(embedding, (1,np.size(embedding))), dtype=torch.float16)
            embedding = embedding.to(device)
            # Generate and save image
            images = pipe(image_embeds=embedding, num_inference_steps=diffusion_steps).images
            images[0].save(image_name)

        def new_generation(fitness, x, iteration):
            pop_size_local = pop_size - 1
            top_n = int(pop_size_local/2)

            # Get top vectors
            idx = np.argsort(fitness)[::-1]
            fitness_sorted = fitness[idx]
            x_sorted = x[idx, :]

            fitness_top = fitness_sorted[:top_n]
            x_top = x_sorted[:top_n, :]

            # Compute recombination probability weights
            median = np.median(fitness)
            fitness_relative = np.clip(fitness_top - median, 0, None)

            weights = np.zeros(np.size(fitness_relative))

            if np.sum(fitness_relative) > 0:
                weights = fitness_relative / np.sum(fitness_relative)
            else:
                weights = np.ones(np.size(fitness_relative)) / pop_size_local

            mean = np.sum((x_top.T * weights).T, axis=0)
            next_x = np.random.multivariate_normal(mean, mutation_size * cov, size=pop_size_local)

            return next_x
      Begin Experiment:
        ## Set to fullscreen
        win.fullscr = True
        win.flip()

        ## Set variables
        global model_path
        model_path = "../../stable-diffusion-2-1-unclip-small"

        global participant
        participant = int(expInfo['participant'])
        if not os.path.exists(f"data/{participant}"):
            os.makedirs(f"data/{participant}")

        global dev_mode
        dev_mode = int(expInfo['dev_mode'])
        #global conditions_selected
        #conditions_selected = expInfo['conditions_selected']
        global scr_attached
        scr_attached = int(expInfo['scr_attached'])
        global diffusion_steps
        diffusion_steps = int(expInfo['diffusion_steps'])

        global max_iters
        max_iters = int(expInfo['max_iters'])
        global pop_size
        pop_size = int(expInfo['pop_size']) + 1 # Add one dummy image
        global mutation_size
        mutation_size = 0.3
        global vec_size
        vec_size = 80
        global embedding_size
        embedding_size = 768
        global eda_samples
        eda_samples = 15

        # Load PCA and covariance matrix
        global pca
        pca = pk.load(open("models/pca.pkl",'rb'))
        global cov
        cov = np.loadtxt("models/covariance_matrix.txt")


        ## Start osc_server subprocess
        process = subprocess.Popen(['python','osc_server.py'], stdout=subprocess.PIPE, stderr=subprocess.PIPE)
        atexit.register(os.kill, process.pid, signal.CTRL_C_EVENT)

        ## Set unCLIP device
        if not dev_mode:
            global device
            device = torch.device('cuda' if torch.cuda.is_available() else 'cpu')
            print('Using device:', device)

            ## Load model
            global pipe
            pipe = StableUnCLIPImg2ImgPipeline.from_pretrained(model_path, torch_dtype=torch.float16, variation="fp16")
            pipe = pipe.to(device)
            # pipe.enable_model_cpu_offload()
            # pipe.enable_vae_slicing()
      Begin Routine:
        iteration = generations.thisN

        repeat = False

        ## Generate vectors
        if iteration == 0:
            this_trial_embeddings = np.random.multivariate_normal(np.zeros(vec_size), cov, size=pop_size)
        else:
            ## CMA algorithm
            fitness = []
            if condition == "selfreport" or not scr_attached:
                fitness = all_ratings[iteration - 1, 1:] # Skip dummy image
            elif condition == "scr":
                fitness = all_scr[iteration - 1, 1:]
            elif condition == "combined":
                scr_fitness = all_scr[iteration - 1, 1:]
                scr_fitness_norm = np.interp(scr_fitness, (np.min(scr_fitness), np.max(scr_fitness)), (0, 1))
                selfreport_fitness = all_ratings[iteration - 1, 1:]
                selfreport_fitness_norm = np.interp(selfreport_fitness, (np.min(selfreport_fitness), np.max(selfreport_fitness)), (0, 1))
                fitness = scr_fitness_norm + selfreport_fitness_norm # Get sum of two scores
            elif condition == "control":
                fitness = np.random.uniform(size = pop_size-1)
            else:
                raise Exception("Error: Invalid condition name")
            embeddings = all_embeddings[iteration - 1, 1:, :]

            # Create a dummy image from the mean of the previous generation
            dummy_embedding = np.mean(all_embeddings[iteration-1,1:,:], axis=0)
            this_trial_embeddings = np.vstack((dummy_embedding, new_generation(fitness, embeddings, iteration)))

        # Concatenate new generation embeddings
        all_embeddings[iteration, :, :] = this_trial_embeddings

        ## Generate batch of images
        for i in range(pop_size):
            image_name = f"images/num-{i}.png"
            pcs = this_trial_embeddings[i,:]
            embedding = pca.inverse_transform(pcs)
            if not dev_mode:
                generate_image(embedding, image_name)


        continueRoutine = False
  Routine rating
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    SliderComponent slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = ("0","","","","","5","","","","","10")
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate the fear you experienced.
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        ## Get SCR amplitudes

        # Get start and end times of trial
        # See end routine of previous trial for current time
        dummy_datetime = datetime.combine(datetime.today(), current_time)
        # Get relevant times
        end_time = dummy_datetime.time()
        start_time = (dummy_datetime - timedelta(seconds=5)).time()
        peak_start_time = (dummy_datetime - timedelta(seconds=4)).time()
        peak_end_time = (dummy_datetime - timedelta(seconds=1)).time()

        trial_timing = [iteration, trial,
            start_time.isoformat(timespec='milliseconds'),
            end_time.isoformat(timespec='milliseconds')]

        trial_timings.loc[len(trial_timings.index)] = trial_timing

        ## Load EDA data
        eda_data = pd.read_csv("stream/eda_data.txt", names=["eda", "time"])
        samp_data = pd.read_csv("stream/samp_data.txt", names=["samp", "time"])
        #hr_data = pd.read_csv("hr_data.txt", names=["hr", "time"])
        #temp_data = pd.read_csv("temp_data.txt", names=["temp", "time"])

        # Convert the 'time' column to datetime format
        eda_data['time'] = pd.to_datetime(eda_data['time'], format='%H:%M:%S.%f').dt.time
        samp_data['time'] = pd.to_datetime(samp_data['time'], format='%H:%M:%S.%f').dt.time
        #hr_data['time'] = pd.to_datetime(hr_data['time'], format='%H:%M:%S.%f').dt.time
        #temp_data['time'] = pd.to_datetime(temp_data['time'], format='%H:%M:%S.%f').dt.time

        # Filter the DataFrame based on the time range
        #peak_data = eda_data[(eda_data['time'] >= peak_start_time) & (eda_data['time'] <= peak_end_time)]
        all_data = eda_data[(eda_data['time'] >= start_time) & (eda_data['time'] <= end_time)]
        peak_samp = samp_data[(samp_data['time'] >= peak_start_time) & (samp_data['time'] <= peak_end_time)]

        #hr_data = hr_data[(hr_data['time'] >= start_time) & (hr_data['time'] <= end_time)]
        #temp_data = temp_data[(temp_data['time'] >= start_time) & (temp_data['time'] <= end_time)]

        # Get average baseline SCR
        #scr_mean = all_data['eda'].mean()
        #hr_mean = hr_data['hr'].mean()
        #temp_mean = temp_data['temp'].mean()



        # Get the max SCR relative to baseline
        scr_score = 0
        if not peak_samp['samp'].empty:
            scr_score = peak_samp['samp'].sum()

        ## Resample the full data and write to array

        # Calculate the average pooling factor
        target_samples = eda_samples
        arr = all_data['eda'].values

        scr_resampled = np.zeros(target_samples)
        if arr.any() and len(arr) >= target_samples:
            factor = arr.shape[0] // target_samples

            # Reshape the array into blocks
            reshaped_arr = arr[:target_samples * factor].reshape(-1, factor)

            # Take the average value within each block
            scr_resampled = np.mean(reshaped_arr, axis=1)
        else:
            repeat = True
            trials.finished = True
      End Routine:
        if slider.getRating() is None:
            all_ratings[iteration,trial] = 0
        else:
            all_ratings[iteration,trial] = slider.getRating()


        all_scr[iteration,trial] = scr_score
        scr_data[iteration, trial, :] = scr_resampled
        #all_scr_means[iteration,trial] = scr_mean
        #all_hr_means[iteration, trial] = hr_mean
        #all_temp_means[iteration, trial] = temp_mean
    ButtonComponent button
      bold = False
      borderColor = black
      borderWidth = 3
      color = black
      fillColor = lightgrey
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Done
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  Routine start_text
    RoutineSettingsComponent start_text
      saveStartStop = False
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    TextComponent intro
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will be presented with a series of images. After each image, rate the fear you experienced on the sliding scale.

        Press [SPACE] to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine end_text
    RoutineSettingsComponent end_text
      saveStartStop = False
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    TextComponent outro
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        The experiment is now over.

        Thank you for participating!
  Routine clear_data
    RoutineSettingsComponent clear_data
      saveStartStop = False
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Reset data for new loop

        all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        all_ratings = np.zeros((max_iters, pop_size))
        all_scr = np.zeros((max_iters, pop_size))
        scr_data = np.zeros((max_iters, pop_size, eda_samples))


        trial_timings = pd.DataFrame(columns=['generation', 'trial', 'start_time', 'end_time'])

        #all_scr_means = np.zeros((max_iters, pop_size))
        #all_hr_means = np.zeros((max_iters, pop_size))
        #all_temp_means = np.zeros((max_iters, pop_size))

        failed_trials = []

        # Reset the EDA file after each use to avoid bloating it
        with open("stream/eda_data.txt", 'w') as file:
            pass
        with open("stream/hr_data.txt", 'w') as file:
            pass
        with open("stream/temp_data.txt", 'w') as file:
            pass
        with open("stream/samp_data.txt", 'w') as file:
            pass
  Routine generate_text
    RoutineSettingsComponent generate_text
      saveStartStop = False
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = Generating...
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  Routine save_data
    RoutineSettingsComponent save_data
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        ## Print outputs to txt
        root = f"data/{participant}/{condition}"
        if not os.path.exists(root):
            os.makedirs(root)
        np.savetxt(f'{root}/embeddings.txt', all_embeddings.reshape((max_iters*pop_size, vec_size)), delimiter=',')
        np.savetxt(f'{root}/ratings.txt', all_ratings, delimiter=',')
        np.savetxt(f'{root}/scr_scores.txt', all_scr, delimiter=',')
        np.savetxt(f'{root}/scr_data_downsampled.txt', scr_data.reshape((max_iters*pop_size, eda_samples)), delimiter=',')
        trial_timings.to_csv(f'{root}/trial_timings.txt', index=False)

        shutil.copy('stream/eda_data.txt', f'{root}')
        shutil.copy('stream/samp_data.txt', f'{root}')
        shutil.copy('stream/hr_data.txt', f'{root}')
        shutil.copy('stream/temp_data.txt', f'{root}')


        #np.savetxt(f'{root}/scr_means.txt', all_scr_means, delimiter=',')
        #np.savetxt(f'{root}/hr_means.txt', all_hr_means, delimiter=',')
        #np.savetxt(f'{root}/temp_means.txt', all_temp_means, delimiter=',')

        # Save failed trials
        with open(f"{root}/failed_trials.txt", 'w') as f:
            for line in failed_trials:
                f.write(f"{line}\n")


        ## Save image backups
        dest_path = f"data/{participant}/{condition}/images/generation_{iteration}"
        if not os.path.exists(dest_path):
            os.makedirs(dest_path)
        shutil.copytree('images', dest_path, dirs_exist_ok=True)

        ## Clear EDA file
        #with open("eda_data.txt", 'w') as file:
        #    pass
    TextComponent text_7
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Saving...
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  Routine block_start
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block. This will take 10-20 minutes.

        Press [SPACE] when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine check_eda
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    TextComponent check_eda_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There is a problem with the EDA connection.

        Please alert the experimenter before continuing with the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent repeat_code
      Code Type = Py
      Begin Routine:
        if not repeat:
            repeat_loop.finished = True
            continueRoutine = False
        elif repeat:
            win.fullscr = False
            win.flip()
            failed_trials.append(f"generation {iteration}, trial {trial}")
      End Routine:
        if repeat:
            win.fullscr = True
            win.flip()
Flow
  Routine start_text
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'selfreport')]),
      OrderedDict([('condition', 'scr')]),
      OrderedDict([('condition', 'control')])]
    Routine block_start
    Routine clear_data
    LoopInitiator generations loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = max_iters
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      LoopInitiator repeat_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 100
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        Routine generate_text
        Routine generating
        LoopInitiator trials loopType="TrialHandler"
          loopType = sequential
          nReps = pop_size
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          Routine trial
          Routine rating
        LoopTerminator trials
        Routine check_eda
      LoopTerminator repeat_loop
      Routine save_data
    LoopTerminator generations
  LoopTerminator block
  Routine end_text
