PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'dev_mode': '1', 'max_iters': '15', 'pop_size': '8'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = image_gen_cma
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        ## Generate batch of images

        ## Variables
        #iteration = generations.thisN
        trial = trials.thisN
        #embedding = this_gen_embeddings[trial, :]

        ## Set image
        image_name = f"images/num-{trial}.png"
      End Routine:
        ## Update output matrices
        #all_embeddings[iteration,trial,:] = embedding
    ImageComponent image
      image [set every repeat] = $image_name
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine washout
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine generating
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating images...
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    CodeComponent generate_images
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import torch
        import numpy as np
        from diffusers import StableUnCLIPImg2ImgPipeline
        from sklearn.decomposition import PCA
        import pickle as pk
        import os, shutil

        ## Classes
        class Image(visual.ImageStim):
            # Embedding property
            embedding = None

        ## Functions
        def generate_image(embedding, image_name):
            # Ensure correct size and datatype
            embedding = torch.tensor(np.reshape(embedding, (1,np.size(embedding))), dtype=torch.float16)
            embedding = embedding.to(device)
            # Generate and save image
            images = pipe(image_embeds=embedding, num_inference_steps=diffusion_steps).images
            images[0].save(image_name)

        def new_generation(fitness, x, iteration):
            top_n = int(pop_size/2)

            # Get top vectors
            idx = np.argsort(fitness)[::-1]
            fitness_sorted = fitness[idx]
            x_sorted = x[idx, :]

            fitness_top = fitness_sorted[:top_n]
            x_top = x_sorted[:top_n, :]

            # Compute recombination probability weights
            median = np.median(fitness)
            fitness_relative = np.clip(fitness_top - median, 0, None)
            weights = fitness_relative / np.sum(fitness_relative)

            mean = np.sum((x_top.T * weights).T, axis=0)
            next_x = np.random.multivariate_normal(mean, mutation_size * np.identity(vec_size), size=pop_size)
            next_x = np.random.multivariate_normal(mean, mutation_size * cov, size=pop_size)

            return next_x
      Begin Experiment:
        ## Set variables
        global model_path
        model_path = "C:/Users/dariu/Documents/PhD/ImageGeneration/stable-diffusion-2-1-unclip-small"
        global diffusion_steps
        diffusion_steps = 21

        global dev_mode
        dev_mode = int(expInfo['dev_mode'])

        global max_iters
        max_iters = int(expInfo['max_iters'])
        global pop_size
        pop_size = int(expInfo['pop_size'])
        global mutation_size
        mutation_size = 0.3
        global vec_size
        vec_size = 80
        global embedding_size
        embedding_size = 768

        # Load PCA and covariance matrix
        global pca
        pca = pk.load(open("pca.pkl",'rb'))
        global cov
        cov = np.loadtxt("covariance_matrix.txt")

        this_gen_embeddings = np.zeros((pop_size, vec_size))
        parent_1 = np.zeros((1, vec_size))
        parent_2 = np.zeros((1, vec_size))

        all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        all_ratings = np.zeros((max_iters, pop_size))

        ## Set unCLIP device
        if not dev_mode:
            global device
            device = torch.device('cuda' if torch.cuda.is_available() else 'cpu')
            print('Using device:', device)

            ## Load model
            global pipe
            pipe = StableUnCLIPImg2ImgPipeline.from_pretrained(model_path, torch_dtype=torch.float16, variation="fp16")
            pipe = pipe.to(device)
            # pipe.enable_model_cpu_offload()
            # pipe.enable_vae_slicing()
      Begin Routine:
        iteration = generations.thisN

        ## Generate vectors
        if iteration == 0:
            this_trial_embeddings = np.random.multivariate_normal(np.zeros(vec_size), cov, size=pop_size)
        else:
            ## CMA algorithm
            fitness = all_ratings[iteration - 1, :]
            embeddings = all_embeddings[iteration - 1, :, :]
            this_trial_embeddings = new_generation(fitness, embeddings, iteration)

        all_embeddings[iteration, :, :] = this_trial_embeddings

        ## Generate batch of images
        for i in range(pop_size):
            image_name = "images/num-{i}.png"
            pcs = this_trial_embeddings[i,:]
            embedding = pca.inverse_transform(pcs)
            if not dev_mode:
                generate_image(embedding, image_name)

        ## Save image backups
        dest_path = f'archived_images/generation_{iteration}'
        if not os.path.exists(dest_path):
            os.mkdir(dest_path)
        shutil.copytree('images', dest_path, dirs_exist_ok=True)
      End Routine:
        ## Print outputs to txt
        np.savetxt('top_embeddings.txt', all_embeddings.reshape((max_iters*pop_size, vec_size)), delimiter=',')
        np.savetxt('all_ratings.txt', all_ratings, delimiter=',')
  Routine rating
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    SliderComponent slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      labels = ("0","","","","","5","","","","","10")
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Please rate the fear you experienced.
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        all_ratings[iteration,trial] = slider.getRating()
    ButtonComponent button
      bold = False
      borderColor = black
      borderWidth = 3
      color = black
      fillColor = lightgrey
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Done
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      callback:
        if slider.getRating():
            continueRoutine = False
  Routine start_text
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    TextComponent intro
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will be presented with a series of images. After each image, rate the fear you experienced on the sliding scale.

        Press [SPACE] to start,
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_text
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    TextComponent outro
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment is now over.

        Thank you for participating!
Flow
  Routine start_text
  LoopInitiator generations loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = max_iters
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    Routine generating
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = pop_size
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      Routine trial
      Routine washout
      Routine rating
      Routine washout
    LoopTerminator trials
  LoopTerminator generations
  Routine end_text
