PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'dev_mode': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = image_gen_self_report
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import torch
        import numpy as np
        from diffusers import StableUnCLIPImg2ImgPipeline

        ## Set variables
        global model_path
        model_path = "path_to_model"
        global diffusion_steps
        diffusion_steps = 21


        global max_iters
        max_iters = 3
        global mutation_rate
        mutation_rate = 0.05
        global mutation_size
        mutation_size = 1
        global vec_size
        vec_size = 768

        embeddings = np.zeros((8, vec_size))
        parent_1 = np.zeros((1, vec_size))
        parent_2 = np.zeros((1, vec_size))

        top_embeddings = np.zeros((max_iters, vec_size))
        all_ratings = np.zeros((1, max_iters))

        ## Classes
        class Image(visual.ImageStim):
            # Embedding property
            embedding = None

        ## Functions
        def generate_image(embedding, image_name):
            # Ensure correct size and datatype
            embedding = torch.tensor(np.reshape(embedding, (1,np.size(embedding))), dtype=torch.float16)
            embedding = embedding.to(device)
            # Generate and save image
            images = pipe(image_embeds=embedding, num_inference_steps=diffusion_steps).images
            images[0].save(image_name)

        def generate_children(parent_1, parent_2):
            embeddings = np.zeros((8, vec_size))
            parent_1 = parent_1.reshape((1,vec_size))
            parent_2 = parent_2.reshape((1,vec_size))

            # Generate recombinations
            for i in range(8):
                child = np.zeros((1, vec_size))
                for j in range(vec_size):
                    choice = np.random.random()
                    if choice <= 0.5:
                        child[0,j] = parent_1[0,j]
                    else:
                        child[0,j] = parent_2[0,j]
                embeddings[i,:] = child

            # Add mutations
            y = np.random.uniform(-mutation_size, mutation_size, size=(8, vec_size))
            z = np.random.binomial(1, mutation_rate, size=(8, vec_size))
            # Create mutation vec
            mutation = np.multiply(y, z)
            # Add to pop
            embeddings = np.add(embedding, mutation)

            return embeddings

        def num_to_pos(num):
            # Converts image order to screen space coordinates
            # x-axis: [-3/5, -1/5, 1/5, 3/5]
            x_pos = (num * 2 - 3) / 5
            if x_pos >= 1:
                x_pos = x_pos - (8/5)
                y_pos = -1/10
            # y-axis: [3/10, -1/10]
            else:
                y_pos = 3/10
            return x_pos, y_pos
      Begin Experiment:
        global dev_mode
        dev_mode = int(expInfo['dev_mode'])

        ## Set unCLIP device
        if not dev_mode:
            global device
            device = torch.device('cuda' if torch.cuda.is_available() else 'cpu')
            print('Using device:', device)

            ## Load model
            global pipe
            pipe = StableUnCLIPImg2ImgPipeline.from_pretrained(model_path, torch_dtype=torch.float16, variation="fp16")
            pipe = pipe.to(device)
            # pipe.enable_model_cpu_offload()
            # pipe.enable_vae_slicing()
      Begin Routine:
        ## Generate batch of images

        ## Variables
        iteration = trials.thisN
        images = []
        selected_image = None

        ## Start with random embeddings
        if iteration == 0:
            embeddings = np.random.randn(8, vec_size)

        ## Generate images based off embeddings
        for i in range(8):
            embedding = embeddings[i,:]
            image_name = f"images/num-{i}.png"
            if not dev_mode:
                generate_image(embedding, image_name)

            # Create stimulus
            x_pos, y_pos = num_to_pos(i)
            image = Image(win=win, name=f"image-{i}", image=image_name,
                anchor="center", pos=(x_pos, y_pos), size=(1/3, 1/3))
            image.embedding = embedding
            image.setAutoDraw(True)
            images.append(image)

        ## Create selection square
        selection_square = visual.Polygon(win=win, name="selection", edges=4,
            anchor="center", pos=(0,0), size=(1/2, 1/2), fillColor="red",
            ori=45.0, opacity=0.2)
        selection_square.setAutoDraw(False)
      Each Frame:
        ## Image selection
        for image in images:
            if mouse.isPressedIn(image, buttons=[0]):
                selected_image = image
                # Draw selection square
                selection_square.pos = image.pos
                selection_square.setAutoDraw(True)


        # If rating and image are selected, continue
        if selected_image and slider.getRating():
            continueRoutine = False
      End Experiment:
        ## Print outputs to txt
        np.savetxt('top_embeddings.txt', top_embeddings, delimiter=',')
        np.savetxt('all_ratings.txt', all_ratings, delimiter=',')
      End Routine:
        ## Clear screen
        for image in images:
            image.setAutoDraw(False)

        selection_square.setAutoDraw(False)

        ## Update output matrices
        top_embeddings[iteration,:] = selected_image.embedding
        all_ratings[0,iteration] = slider.getRating()

        ## Get embeddings for next round
        # Update parent_2 (parent 1 from last round)
        # (Or random vec if just starting)
        if iteration == 0:
            parent_2 = np.random.randn(1, vec_size)
        else:
            parent_2 = parent_1

        # Update parent 1 with current selected image
        parent_1 = selected_image.embedding

        ## Run children generation
        embeddings = generate_children(parent_1, parent_2)
    SliderComponent slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine washout
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = max_iters
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    Routine trial
    Routine washout
  LoopTerminator trials
